graphs:

- id: CognitiveLoad
  nodes:
  - id: sub
    module: timeflux.nodes.zmq
    class: Sub
    params:
      topics: [ filtered ]
  - id: window
    module: timeflux.nodes.window
    class: Slide
    params:
      length: 1
      step: 0.5
  - id: cognitiveload
    module: nodes.metrics
    class: CognitiveLoad
  - id: pub
    module: timeflux.nodes.zmq
    class: Pub
    params:
      topic: cognitiveload
  # - id: display
  #   module: timeflux.nodes.debug
  #   class: Display
  edges:
    - source: sub:filtered
      target: window
    - source: window
      target: cognitiveload
    - source: cognitiveload
      target: pub
    # - source: cognitiveload
    #   target: display
  rate: 10
